#  Example Qudi configuration file.

global:
    # list of modules to load when starting
    startup: []

    # Module server configuration for accessing qudi GUI/logic/hardware modules from remote clients
   # remote_modules_server:
   #     address: '129.69.46.82'
   #     port: 12345

    # Server port for serving the active qudi module namespace locally (localhost).
    # Used by e.g. the Qudi jupyter kernel.
    namespace_server_port: 18861

    # If this flag is set (True), all arguments passed to qudi module APIs from remote
    # (jupyter notebook, qudi console, remote modules) will be wrapped and passed "per value"
    # (serialized and de-serialized). This is avoiding f lot of inconveniences with using numpy in
    # remote clients.
    # If you do not want to use this workaround and know what you are doing, you can disable this
    # feature by setting this flag to False.
    force_remote_calls_by_value: True

    # Qss stylesheet for controlling the appearance of the GUIs.
    # Absolute path or relative to qudi.artwork.styles
    stylesheet: 'qdark.qss'

    # Default root directory for measurement data storage. All eventual data sub-directories should
    # be contained within this directory. This is not enforced, just convention.
    # The fallback directory is <user home>/qudi/Data/
    # default_data_dir: C:\Users\neverhorst\qudi\Data

    # Save data to daily data sub-directories by default
    daily_data_dirs: True

gui:
   # setup_control_gui:
   #     module.Class: 'setup_control.setup_control.SetupControlGui'
        #connect:
        #    Setup_Control_Logic: setup_control_logic_QINU

    timetagger:
        module.Class: 'timetagger.timetagger.TTGui'
        connect:
            timetaggerlogic: 'timetaggerlogic'



    magnetgui:
        module.Class: 'magnet.magnetgui.MagnetWindow'
        connect:
            magnetlogic: magnetlogic

    magnetgui_qinu:
        module.Class: 'magnet.magnet_gui_qinu.MagnetWindow'
        connect:
            magnetlogic: magnetlogic
            magnet: vector_magnet

    camera_gui:
        module.Class: 'camera.cameragui.CameraGui'
        connect:
            camera_logic: camera_logic
    
    setup_control:
        module.Class: setup_control_old.setupcontrolgui.SetupControlGUI
        connect:
            setupcontrollogic: setupcontrollogic
        options: {}
    scanner_gui:
        module.Class: 'scanning.scannergui.ScannerGui'
        options:
            image_axes_padding: 0.02
            default_position_unit_prefix: null  # optional, use unit prefix characters, e.g. 'u' or 'n'
            optimizer_plot_dimensions: [2,1]
        connect:
            scanning_logic: scanning_probe_logic
            data_logic: scanning_data_logic
            optimize_logic: scanning_optimize_logic

    odmr_gui:
        module.Class: 'odmr.odmrgui.OdmrGui'
        connect:
            odmr_logic: 'odmr_logic'
logic:

    timetaggerlogic:
        module.Class: 'timetagger_logic.TimeTaggerLogic'
        connect:
            timetagger: 'tagger'

    magnetlogic:
        module.Class: 'magnetlogic.MagnetLogic'
        connect:
            magnet: vector_magnet
            tagger: tagger

    camera_logic:
        module.Class: 'camera_logic.CameraLogic'
        connect:
            camera: 'thorlabs_camera'

    scanning_probe_logic:
        module.Class: 'scanning.probe_logic.ScanningProbeLogic'
        options:
            max_history_length: 10
            max_scan_update_interval: 2
            position_update_interval: 1
            backwards_line_resolution: 100
        connect:
            scanner: adwin_scanner


    setupcontrollogic:
        module.Class: setup_control.setup_control.SetupControlLogicQINU
        connect:
            Adwin_IO: adwin_IO
        options: {}

    scanning_data_logic:
        module.Class: 'scanning.data_logic.ScanningDataLogic'
        options:
            max_history_length: 10
        connect:
            scan_logic: scanning_probe_logic

    scanning_optimize_logic:
        module.Class: 'scanning.optimize_logic.ScanningOptimizeLogic'
        connect:
            scan_logic: scanning_probe_logic
        options:
            backwards_line_resolution: 20

    odmr_logic:
        module.Class: 'odmr_logic.OdmrLogic'    
        connect:
            microwave: 'mw_source_smiq'
            data_scanner: 'ni_tt_finite_sampling_input'
hardware:

    powermeter:
        module.Class: 'powermeter.thorlabs_powermeter.ThorlabsPowermeter'
        options:
            # Device address of the powermeter.
            # If omitted, the module will connect to the first powermeter found on the system.
            # The module logs an info message with the addresses of all available powermeters upon activation.
            # address: 'USB0::0x1313::0x8078::P0012345::INSTR'
            wavelength: 520.0

    thorlabs_camera:
        module.Class: 'camera.thorlabs.thorlabs_DCx.CameraThorlabs'
        options:
            default_exposure: 0.1
            default_gain: 1.0
            id_camsera: 0 # if more tha one camera is present

   # adwin_base:
   #     module.Class: 'jaeger_computer_technik.adwin_base.AdwinBase' #Should also contain all functions of adwin_old
    
    
    adwin_AO: #for confocal static.
        module.Class: 'jaeger_computer_technik.adwin_IO.Adwin_AO'
        options:
            device_name: 'adwin11'
            channels:
                ao1: #x#
                    limits: [-5.0, 5.0]
                    limits_LT: [-5.0, 5.0]
                    keep_value: True
                ao2: #y#
                    limits: [-5.0, 5.0]
                    limits_LT: [-5.0, 5.0]
                    keep_value: True
                ao3: #z#
                    limits: [0.0, 5.0]
                    #limits: [0, 10]
                    limits_LT: [0, 5.0]
                    keep_value: True
    
    vector_magnet:
        module.Class: 'jaeger_computer_technik.adwin_vector_magnet.Magnet3D'

        options:
            ramp_freq: 2 #Hz
            voltage_step_size: 0.01 # V
            timerIntervals:
                'fastRamp' : 1000
                'rampToZero' : 1000
    
    adwin_IO:
        module.Class: 'jaeger_computer_technik.adwin_IO.Adwin_IO'
        options:
            ports:
                digital:
                    0: 
                        name: 'green_laser'
                        IO: 'in'
        
#                    0:
#                        name: 'lamp'
#                        IO: 'in'
#
                    1:
                        name: 'flip_powermeter'
                        IO: 'in'
                
                    2: 
                        name: 'flip_mirror_camera_path' 
                        IO: 'in'

                analog:
                    7:
                        name: 'green_laser_attenuation'

                    8:
                        name: 'lamp_power'

            
    fastcounter_timetagger:
        module.Class: 'swabian_instruments.timetagger_fast_counter.TimeTaggerFastCounter'
        options:
            timetagger_channel_apd_0: 1
            timetagger_channel_apd_1: 2
            timetagger_channel_detect: 5
            timetagger_channel_sequence: 5
            timetagger_sum_channels: True
        connect:
            timetagger: 'tagger'
    
    tagger:
        module.Class: 'swabian_instruments.timetagger_api.TT'
        options:
            port: 12233
            hist:
                channels: [1,2, 3]
                trigger_channel: 5

            corr:
                channel_start: 2
                channel_stop: 3
            counter:
                channels: [1,2, 3]

            combiner:
                channels: [1,2]
            channels_params:
                1:
                    delay: 0
                    trigger_level: 0.3
                2:
                    delay: -30e3
                    trigger_level: 0.3
                3:
                    delay: 0
                    trigger_level: 0.3
                6: # cwave internal scanner
                    delay: 20e3
                    trigger_level: 2
                8: # cwave internal scanner
                    delay: 0
                    trigger_level: 1
    
    
    # #This is for the slow analog outputs probably. (set position, etc.)
    # adwin_ao: #copy from ni_X_series.ni_x_series_analog_output.NIXSeriesAnalogOutput'
    #     module.Class: 'jaeger_computer_technik.adwin_IO'
    #     options:
    #         device_name: 'adwin11'

    #         channels:
    #             ao0:
    #                 unit: 'V'
    #                 limits: [0, 10]
    #                 limits_LT: [0, 10]
    #                 keep_value: True
    #             ao1:
    #                 unit: 'V'
    #                 limits: [0, 10]
    #                 limits_LT: [0, 10]
    #                 keep_value: True
    #             ao2:
    #                 unit: 'V'
    #                 limits: [0, 10]
    #                 limits_LT: [0, 10]
    #                 keep_value: True

    adwin_galvo:
        module.Class: 'jaeger_computer_technik.adwin_Scanner.Adwin_Scanning_Device'
        options:
            device_name: 'adwin11'
            channels:
                ao1:
                    unit: 'V'
                    limits: [-5.0, 5.0]
                    keep_value: True
                ao2:
                    unit: 'V'
                    limits: [-5.0, 5.0]
                    keep_value: True


                ao3:
                    unit: 'V'
                    limits: [0, 5.0]
                    keep_value: True
            clock:
                do7: 'scan_clock_physical_output'


    adwin_tt_io: ###C:\Users\yy3\git\squdi\src\qudi\hardware\jaeger_computer_technik\adwin_tt_io.py
        module.Class: 'jaeger_computer_technik.adwin_tt_io.AdwinSamplingIO'
        connect:
            tt: tagger
            adwin: adwin_galvo

        options:
            device_name: 'adwin11' ##for booting? - maybe not needed as it is lready in adwin_base.
            input_channel_units:  # optional
                tt_1: 'c/s'
                tt_2: 'c/s'
                tt_3: 'c/s'
                #ai0: 'V'
                #ai1: 'V'
            sum_channels: ["tt_1", "tt_2"]
            output_channel_units:
                'ao1': 'V'
                'ao2': 'V'
                'ao3': 'V'
                #'ao3': 'V'
            #adc_voltage_ranges:
                #ai0: [-10, 10]  # optional
                #ai1: [-10, 10]  # optional
            output_voltage_ranges:
                ao1: [-5, 5]
                ao2: [-5, 5]
                ao3: [0, 5]
                #ao3: [0, 1]
            output_voltage_ranges_LT:
                ao1: [-5, 5]
                ao2: [-5, 5]
                ao3: [0, 5]
                #ao3: [0, 1]
    
            
            #TODO output range, also limits need to be included in constraints
            frame_size_limits: [1, 1e9]  # optional #TODO actual HW constraint?
            output_mode: 'JUMP_LIST' #'JUMP_LIST' # optional, must be name of SamplingOutputMode
            read_write_timeout: 10  # optional
            sample_clock_output: 'do7' # optional
            tt_adwin_clock_input: 'tt_4' #input of the clock for the NI card into the time tagger
            tt_falling_edge_clock_input: 'tt_4'
            #flip mirror porto 0 channel 4
    
    adwin_scanner:
        #module.Class: 'jaeger_computer_technik.adwin_base.AdwinBase'
        module.Class: 'interfuse.adwin_scanning_probe_interfuse.NiScanningProbeInterfuseBare'
        connect:
            scan_hardware: 'adwin_tt_io'
            analog_output: 'adwin_AO'
        
        options:
            ni_channel_mapping:
                z: 'ao3'
                x: 'ao1'
                y: 'ao2'
                APD1: 'tt_1'
                #APD2: 'tt_2'
                #APD3: 'tt_3'
                #AI0: 'ai0'
                #APD3: 'PFI10'
            sum_channels: ["tt_1"]#, "tt_2"]
            scan_units: 'm'
            position_ranges: # in m
                z: [-5e-6, 15e-6]
                x: [-200e-6, 200e-6]
                y: [-200e-6, 200e-6]
            frequency_ranges:
                z: [1, 300]
                x: [1, 300]
                y: [1, 300]
            resolution_ranges:
                z: [1, 1000]
                x: [1, 1000]
                y: [1, 1000]
            input_channel_units:
                APD1: 'c/s'
                #APD2: 'c/s'
                #APD3: 'c/s'
                #AI0: 'V's
                #APD2: 'c/s'
                #APD3: 'c/s'
            
            #backwards_line_resolution: 200 # optional
            maximum_move_velocity: 400e-6 #400e-6 #m/s 
            default_samples_number: 50
            max_counts: 3e7
            read_write_timeout: 10
            counting_edge_rising: True
            scanner_counter_channels: ['1','2']
                
    mw_source_smiq:
        module.Class: 'microwave.mw_source_smiq.MicrowaveSmiq'
        options:
            visa_address: 'GPIB0::25::INSTR'
            comm_timeout: 10000  # in milliseconds
            



   