#  Example Qudi configuration file.

global:
    # list of modules to load when starting
    startup_modules: ['timetagger', 'pulsed_gui']

    # Module server configuration for accessing qudi GUI/logic/hardware modules from remote clients
    remote_modules_server:
        address: '129.69.46.82'
        port: 12345
        certfile: 'C:\Users\YY3\keys\mkCryo.crt'
        keyfile: 'C:\Users\YY3\keys\mkCryo.key'
        # cacerts: 'C:\Users\YY3\keys\tinPC.crt'


    # Server port for serving the active qudi module namespace locally (localhost).
    # Used by e.g. the Qudi jupyter kernel.
    namespace_server_port: 18861

    # If this flag is set (True), all arguments passed to qudi module APIs from remote
    # (jupyter notebook, qudi console, remote modules) will be wrapped and passed "per value"
    # (serialized and de-serialized). This is avoiding f lot of inconveniences with using numpy in
    # remote clients.
    # If you do not want to use this workaround and know what you are doing, you can disable this
    # feature by setting this flag to False.
    force_remote_calls_by_value: True

    # Qss stylesheet for controlling the appearance of the GUIs.
    # Absolute path or relative to qudi.artwork.styles
    stylesheet: 'qdark.qss'

    # Default root directory for measurement data storage. All eventual data sub-directories should
    # be contained within this directory. This is not enforced, just convention.
    # The fallback directory is <user home>/qudi/Data/
    # default_data_dir: C:\Users\neverhorst\qudi\Data
    default_data_dir: Z:\Vlad\Daily_data\bluefors
    # Save data to daily data sub-directories by default
    daily_data_dirs: True

gui:
    scanner_gui:
        module.Class: 'scanning.scannergui.ScannerGui'
        options:
            image_axes_padding: 0.02
            default_position_unit_prefix: null  # optional, use unit prefix characters, e.g. 'u' or 'n'
            optimizer_plot_dimensions: [2,1]
        connect:
            scanning_logic: scanning_probe_logic
            data_logic: scanning_data_logic
            optimize_logic: scanning_optimize_logic
    
    # wavemeter_gui:
    #     module.Class: 'wavemeter.wavemeterloggui.WavemeterLogGui'
    #     connect:
    #         wavemeterloggerlogic: 'wavelogger_logic'
    spectrometer:
        module.Class: 'spectrometer.spectrometer_gui.SpectrometerGui'
        connect:
            spectrometer_logic: 'spectrometerlogic_pi'
        
    timetagger:
        module.Class: 'timetagger.timetagger.TTGui'
        connect:
            timetaggerlogic: 'timetaggerlogic'
    timetagger_remote:
        module.Class: 'timetagger.timetagger.TTGui'
        connect:
            timetaggerlogic: 'timetaggerlogic_remote'

    magnetgui:
        module.Class: 'magnet.magnetgui.MagnetWindow'
        connect:
            magnetlogic: magnetlogic
    
    magnetgui_qinu:
        module.Class: 'magnet.magnet_gui_qinu.MagnetWindow'
        connect:
            magnetlogic: magnetlogic
            magnet: vector_magnet

    odmr_gui:
        module.Class: 'odmr.odmrgui.OdmrGui'
        options:
            mw_source_name : 'mw_source_smiq'
        connect:
            odmr_logic: 'odmr_logic'
            
    odmr_gui2:
        module.Class: 'odmr.odmrgui.OdmrGui'
        options:
            mw_source_name : 'mw_source_smiq2'
        connect:
            odmr_logic: 'odmr_logic2'
            

    cwave_gui:
        module.Class: 'cwave.cwave_gui.CwaveGui'
        connect:
            cwavelogic: 'cwavelogic'
    ple_gui_remote:
        module.Class: 'ple.ple_gui.PLEScanGui'
        connect:
            scannerlogic: laser_scanner_logic_remote
            optimizerlogic: ple_optimize_logic_remote
            data_logic: ple_data_logic_remote

    ple_gui:
        module.Class: 'ple.ple_gui.PLEScanGui'
        connect:
            scannerlogic: laser_scanner_logic
            optimizerlogic: ple_optimize_logic
            data_logic: ple_data_logic

            #controller: ple_controller_interfuse_logic
            # microwave: odmr_logic
            #repump: ple_repump_interfuse_logic
    
    cavity_gui:
        module.Class: 'ple.ple_gui.PLEScanGui'
        connect:
            scannerlogic: cavity_scanner_logic
            optimizerlogic: cavity_optimize_logic
            data_logic: cavity_data_logic
            #controller: ple_controller_interfuse_logic
            # microwave: odmr_logic
            #repump: ple_repump_interfuse_logic
    switch_gui:
        module.Class: 'switch.switch_gui.SwitchGui'
        connect:
            switchlogic: 'switchlogic'

    pulsed_gui:
        module.Class: 'pulsed.pulsed_maingui.PulsedMeasurementGui'
        connect:
            pulsedmasterlogic: 'pulsed_master_logic'
    poi_manager_gui:
        module.Class: 'poimanager.poimanagergui.PoiManagerGui'
        connect:
            poi_manager_logic: 'poi_manager_logic'

    power_controller_gui:
        module.Class: 'power_controller.powercontroller_gui.PowerControllerGui'
        connect:
            powercontrollerlogic: powercontroller_logic
    time_series_gui:
        module.Class: 'time_series.time_series_gui.TimeSeriesGui'
        options:
            use_antialias: True  # optional, set to False if you encounter performance issues
        connect:
            _time_series_logic_con: time_series_reader_logic
    
    # poi_manager_gui_remote:
    #     native_module_name: 'poi_manager_gui'
    #     address: '129.69.46.64'
    #     port: 12345
    #     certfile: 'C:\Users\YY3\keys\mkCryo.crt'
    #     keyfile: 'C:\Users\YY3\keys\mkCryo.key'

logic:
    poi_manager_logic_remote:
        native_module_name: 'poi_manager_logic'
        address: '129.69.46.64'
        port: 12345
        certfile: 'C:\Users\YY3\keys\mkCryo.crt'
        keyfile: 'C:\Users\YY3\keys\mkCryo.key'

    cavity_scanner_logic:
        module.Class: 'ple.ple_scanner_logic.PLEScannerLogic'
        options:
            scan_axis: 'a'
            max_history_length: 10
            max_scan_update_interval: 2
            position_update_interval: 1
            channel: 'sum'
        connect:
            scanner: ni_laser_scanner_local

    laser_scanner_logic:
        module.Class: 'ple.ple_scanner_logic.PLEScannerLogic'
        options:
            scan_axis: 'a'
            max_history_length: 10
            max_scan_update_interval: 2
            position_update_interval: 1
            channel: 'sum'
        connect:
            scanner: tt_laser_scanner #ni_laser_scanner #ni_cwave_scanner
    
    laser_scanner_logic_remote:
        module.Class: 'ple.ple_scanner_logic.PLEScannerLogic'
        options:
            scan_axis: 'a'
            max_history_length: 10
            max_scan_update_interval: 2
            position_update_interval: 1
            channel: 'sum'
        connect:
            scanner: tt_laser_scanner_remote #ni_laser_scanner

    magnetlogic:
        module.Class: 'magnetlogic.MagnetLogic'
        connect:
            magnet: vector_magnet
            tagger: tagger

    ple_controller_interfuse_logic:
       module.Class: 'ple.controller_interfuse.ControllerInterfuseLogic'
       options:
            power_channel: 3
       connect:
        #    switchlogic: "switchlogic"
            power_controller: powercontroller_logic

    ple_repump_interfuse_logic:
       module.Class: 'ple.repump_interfuse.RepumpInterfuseLogic'
       options:
           resonant_laser:  'd_ch8'
           repump_laser: 'd_ch1'
       connect:
           pulsed: pulsed_master_logic
       
    ple_data_logic:
        module.Class: 'ple.data_logic.PleDataLogic'
        options:
            max_history_length: 10
        connect:
            scan_logic: laser_scanner_logic
    
    ple_data_logic_remote:
        module.Class: 'ple.data_logic.PleDataLogic'
        options:
            max_history_length: 10
        connect:
            scan_logic: laser_scanner_logic_remote

    ple_optimize_logic:
        module.Class: 'ple.optimize_logic.PLEOptimizeScannerLogic'
        connect:
            scan_logic: laser_scanner_logic

    ple_optimize_logic_remote:
        module.Class: 'ple.optimize_logic.PLEOptimizeScannerLogic'
        connect:
            scan_logic: laser_scanner_logic_remote

    cavity_optimize_logic:
        module.Class: 'ple.optimize_logic.PLEOptimizeScannerLogic'
        connect:
            scan_logic: cavity_scanner_logic

    cavity_data_logic:
        module.Class: 'ple.data_logic.PleDataLogic'
        options:
            max_history_length: 10
        connect:
            scan_logic: cavity_scanner_logic

    poi_manager_logic:
        module.Class: 'scanning.poi_manager_logic.PoiManagerLogic'
        connect:
            scanning_logic: 'scanning_probe_logic'
            optimize_logic: 'scanning_optimize_logic'
            data_logic: 'scanning_data_logic'

    odmr_logic:
        module.Class: 'odmr_logic.OdmrLogic'    
        connect:
            microwave: 'mw_source_smiq'
            data_scanner: 'ni_tt_finite_sampling_input'
    
    odmr_logic2:
        module.Class: 'odmr_logic.OdmrLogic'    
        connect:
            microwave: 'mw_source_smiq2'
            data_scanner: 'ni_tt_finite_sampling_input'

    scanning_probe_logic:
        module.Class: 'scanning.probe_logic.ScanningProbeLogic'
        options:
            max_history_length: 10
            max_scan_update_interval: 2
            position_update_interval: 1
            backwards_line_resolution: 100
        connect:
            scanner: ni_scanner
    #ni_scanner

    scanning_data_logic:
        module.Class: 'scanning.data_logic.ScanningDataLogic'
        options:
            max_history_length: 10
        connect:
            scan_logic: scanning_probe_logic

    scanning_optimize_logic:
        module.Class: 'scanning.optimize_logic.ScanningOptimizeLogic'
        connect:
            scan_logic: scanning_probe_logic
        options:
            backwards_line_resolution: 20

    time_series_reader_logic:
        module.Class: 'time_series_reader_logic.TimeSeriesReaderLogic'
        options:
            max_frame_rate: 10  # optional (10Hz by default)
            calc_digital_freq: True  # optional (True by default)
            active_channels: ['ai0','pfi3']
        connect:
            streamer: ni_instreamer

    # spectrometerlogic:
    #     module.Class: 'spectrometer_logic.SpectrometerLogic'
    #     connect:
    #         spectrometer: 'princeton'#'oceanoptics'#
    #         flip_mirror: 'flip_mirror_switch_ni'

    spectrometerlogic_pi:
        module.Class: 'spectrometer_logic.SpectrometerLogic'
        connect:
            spectrometer: 'princeton_picam_remote' #'princeton'
            flip_mirror: 'ello_switch_remote'

    timetaggerlogic:
        module.Class: 'timetagger_logic.TimeTaggerLogic'
        options:
            gated_counter_crc_veto_channel: 6  # STM32 CRC veto output channel
        connect:
            timetagger: 'tagger'

    timetaggerlogic_remote:
        module.Class: 'timetagger_logic.TimeTaggerLogic'
        options:
            gated_counter_crc_veto_channel: 6  # STM32 CRC veto output channel
        connect:
            timetagger: 'tagger_remote'

    pulsed_master_logic:
        module.Class: 'pulsed.pulsed_master_logic.PulsedMasterLogic'
        connect:
            pulsedmeasurementlogic: 'pulsed_measurement_logic'
            sequencegeneratorlogic: 'sequence_generator_logic'

    sequence_generator_logic:
        module.Class: 'pulsed.sequence_generator_logic.SequenceGeneratorLogic'
        #overhead_bytes: 0
        #additional_predefined_methods_path: null
        #additional_sampling_functions_path: null
        #assets_storage_path:
        connect:
            pulsegenerator: "pulsestreamer"

    pulsed_measurement_logic:
        module.Class: 'pulsed.pulsed_measurement_logic.PulsedMeasurementLogic'
        options:
            default_data_storage_type: 'text'
            timetagger_channel_apd_0: 1
            timetagger_channel_apd_1: 2
            timetagger_channel_detect: 5
            timetagger_channel_sequence: 5
            timetagger_sum_channels: True
            timetagger_channel_crc_veto: 6
            default_analysis_settings:
                method: 'snv_ssr'
                signal_start: 0.0
                signal_end: 1.0e-6
                norm_start: 0.0
                norm_end: 0.5e-6
                crc_threshold: 5.0
                ssr_threshold: 2.0
                bright_state_if_above: True
                sequence_stride: 3
                crc_index: 0
                readout_index: 2
            #additional_extraction_path:
            #additional_analysis_path:
        connect:
            tagger: "tagger"
            crc: 'crc'
            #microwave: 'microwave_dummy'
            pulsegenerator: "pulsestreamer"

    switchlogic:
        module.Class: 'switch_logic.SwitchLogic'
        connect:
            switch: switch_combiner_interfuse
        #options:
        #   watchdog_interval: 1  # optional
        #   autostart_watchdog: True  # optional
    wavelogger_logic:
        module.Class: "wavemeter_logger_logic.WavemeterLoggerLogic"
        connect:
            wavemeter: "ws_wavemeter" 
            # timetagger: 'tagger'

    cwavelogic:
        module.Class: "cwave_logic.CwaveLogic"
        connect:
            cwavelaser: "cwave"

    powercontroller_logic:
        module.Class: "power_controller.PowerControllerLogic"
        connect:
            #powermeter: "powermeter"
            motor_pi3: "motordriver_pi3"

hardware:

    fastcounter_timetagger:
        module.Class: 'swabian_instruments.timetagger_fast_counter.TimeTaggerFastCounter'
        options:
            timetagger_channel_apd_0: 1
            timetagger_channel_apd_1: 2
            timetagger_channel_detect: 5
            timetagger_channel_sequence: 5
            timetagger_sum_channels: True
        connect:
            timetagger: 'tagger'  # Shared TimeTagger instance used by scanner modules
    
    tagger:
        module.Class: 'swabian_instruments.timetagger_api.TT'
        options:

            remote_tagger_ip: '129.69.46.82'
            remote_tagger_port: 41101
            hist:
                channels: [1,2, 3]
                trigger_channel: 5

            corr:
                channel_start: 2
                channel_stop: 3
            counter:
                channels: [1,2, 3]
            time_differences:
                channels: [1, 2, 3]  
                start_channel: 5     
                next_channel: 5      
            combiner:
                channels: [1,2]
            channels_params:
                1:
                    delay: 0
                    trigger_level: 0.3
                2:
                    delay: 18e3
                    trigger_level: 0.12
                3:
                    delay: 0
                    trigger_level: 0.12
                6: # cwave internal scanner
                    delay: 0
                    trigger_level: 0.1
                8: # cwave internal scanner
                    delay: 0
                    trigger_level: 1

    tagger_remote:
        module.Class: 'swabian_instruments.timetagger_api.TT'
        options:
            remote_tagger_ip: '129.69.46.64'
            remote_tagger_port: 41101
            counter:
                channels: [1, 2]
            hist:
                channels: [1, 2]
                trigger_channel: 5

            corr:
                channel_start: 1
                channel_stop: 2


    ni_scanner:
        module.Class: 'interfuse.ni_scanning_probe_interfuse.NiScanningProbeInterfuseBare'
        connect:
            scan_hardware: 'ni_tt_io'
            analog_output: 'ni_ao'
        options:
            ni_channel_mapping:
                z: 'ao2'
                x: 'ao0'
                y: 'ao1'
                APD1: 'tt_1'
                APD2: 'tt_2'
                APD3: 'tt_3'

                #AI0: 'ai0'
                #APD3: 'PFI10'
            sum_channels: ["tt_1", "tt_2"]
            scan_units: 'm'
            position_ranges: # in m
                z: [-7.5e-6, 7.5e-6]
                x: [-20e-6, 20e-6]
                y: [-20e-6, 20e-6]
            frequency_ranges:
                z: [1, 300]
                x: [1, 300]
                y: [1, 300]
            resolution_ranges:
                z: [1, 1000]
                x: [1, 1000]
                y: [1, 1000]
            input_channel_units:
                APD1: 'c/s'
                APD2: 'c/s'
                APD3: 'c/s'
                #AI0: 'V's
                #APD2: 'c/s'
                #APD3: 'c/s'
            
            #backwards_line_resolution: 200 # optional
            maximum_move_velocity: 20e-6 #400e-6 #m/s 
    ni_laser_scanner:
        module.Class: 'interfuse.ni_scanning_probe_interfuse.NiScanningProbeInterfuse'
        connect:
            scan_hardware: 'ni_tt_io_laser_remote'
            analog_output: 'ni_ao_laser_remote'
        options:
            ni_channel_mapping:
                a: 'ao2'
                APD1: 'tt1'
                APD2: 'tt2'
                #APD111: 'tt111'
                AI0: 'ai0'
                APD3: 'tt3'
            sum_channels: ["tt1", "tt2", 'tt3']
            scan_units: 'MHz'
            position_ranges: # in m
                a: [0, 29999]
            frequency_ranges:
                a: [1, 500]
            resolution_ranges:
                a: [20, 5000]
            input_channel_units:
                APD1: 'c/s'
                APD2: 'c/s'
                #APD111: 'c/s'
                AI0: 'V'
                #APD2: 'c/s'
                APD3: 'c/s'
            backwards_line_resolution: 100 # optional
            maximum_move_velocity: 2e3 #MHz/s

    ws_wavemeter:
        native_module_name: 'high_finesse_wavemeter_server'
        address: '129.69.46.209'
        port: 12345
        certfile: 'C:\Users\YY3\keys\mkCryo.crt'
        keyfile: 'C:\Users\YY3\keys\mkCryo.key'

    # shutter_switch:
    #     native_module_name: 'shutter_switch_ni'
    #     address: '129.69.46.82'
    #     port: 12345
    #     certfile: 'C:\Users\YY3\keys\mkCryo.crt'
    #     keyfile: 'C:\Users\YY3\keys\mkCryo.key'
    
    #motordriver_pi3_remote:
    #    native_module_name: 'motordriver_pi3'
    #    address: '129.69.46.209'
    #    port: 12345
    #    certfile: 'C:\Users\YY3\keys\mkCryo.crt'
    #    keyfile: 'C:\Users\YY3\keys\mkCryo.key'



    ni_laser_scanner_local:
        module.Class: 'interfuse.ni_scanning_probe_interfuse.NiScanningProbeInterfuse'
        connect:
            scan_hardware: 'ni_tt_io'
            analog_output: 'ni_ao_cavity'
        options:
            ni_channel_mapping:
                a: 'ao3'
                APD1: 'tt_1'
                APD2: 'tt_2'
                #APD111: 'tt111'
                APD3: 'tt_3'
            sum_channels: ["tt_1", "tt_2"]
            scan_units: 'MHz'
            position_ranges: # in m
                a: [0, 29999]
            frequency_ranges:
                a: [1, 500]
            resolution_ranges:
                a: [20, 5000]
            input_channel_units:
                APD1: 'c/s'
                APD2: 'c/s'
                #APD111: 'c/s'
                #APD2: 'c/s'
                APD3: 'c/s'
            backwards_line_resolution: 100 # optional
            maximum_move_velocity: 5e3 #MHz/s

    ni_tt_io_laser_remote:
        module.Class: "interfuse.ni_io_tt_interfuse.NI_IO_TT_Interfuse"
        connect:
            scan_hardware : ni_x_io_remote
            tt : tagger
        options:
            input_channel_units:  # optional
                    tt1: 'c/s'
                    tt2: 'c/s'
                    tt3: 'c/s'
            sum_channels: ["tt1", "tt2", "tt3"]            
            tt_ni_clock_input: 'tt8' #input of the clock for the NI card into the time tagger
            tt_falling_edge_clock_input: 'tt8'

    ni_x_io_remote:
        native_module_name: 'ni_finite_sampling_io'
        address: '129.69.46.209'
        port: 12345
        certfile: 'C:\Users\YY3\keys\mkCryo.crt'
        keyfile: 'C:\Users\YY3\keys\mkCryo.key'

    ni_ao_laser_remote:
        native_module_name: 'ni_ao_laser_remote'
        address: '129.69.46.209'
        port: 12345
        certfile: 'C:\Users\YY3\keys\mkCryo.crt'
        keyfile: 'C:\Users\YY3\keys\mkCryo.key'
        

    ni_tt_io:
        module.Class: 'ni_x_series.ni_tt_io.NI_TT_XSeriesFiniteSamplingIO'
        connect:
            tt: tagger
        options:
            device_name: 'Dev1'
            input_channel_units:  # optional
                tt_1: 'c/s'
                tt_2: 'c/s'
                tt_3: 'c/s'
                #ai0: 'V'
                #ai1: 'V'
            sum_channels: ["tt_1", "tt_2"]
            output_channel_units:
                'ao0': 'V'
                'ao1': 'V'
                'ao2': 'V'
                'ao3': 'V'
            #adc_voltage_ranges:
                #ai0: [-10, 10]  # optional
                #ai1: [-10, 10]  # optional
            output_voltage_ranges:
                ao0: [0, 10]
                ao1: [0, 10]
                ao2: [0, 10]
                ao3: [0, 4]
            output_voltage_ranges_LT:
                ao0: [0, 10]
                ao1: [0, 10]
                ao2: [0, 10]
                ao3: [0, 4]
    
            
            #TODO output range, also limits need to be included in constraints
            frame_size_limits: [1, 1e9]  # optional #TODO actual HW constraint?
            output_mode: 'JUMP_LIST' #'JUMP_LIST' # optional, must be name of SamplingOutputMode
            read_write_timeout: 10  # optional
            sample_clock_output: '/Dev1/PFI14' # optional
            tt_ni_clock_input: 'tt_4' #input of the clock for the NI card into the time tagger
            tt_falling_edge_clock_input: 'tt_4'
            #flip mirror porto 0 channel 4

    ni_tt_finite_sampling_input:
        module.Class: 'ni_x_series.ni_x_tt_series_finite_sampling_input.NIXTTSeriesFiniteSamplingInput'
        connect:
            tagger: 'tagger'
        options:
            device_name: 'Dev1'
            digital_channel_units:  # optional
                'tt_1': 'cnts'
            #     'tt_2': 'cnts'
            #     'tt_3': 'cnts'
            # sum_channels: ["tt_1", "tt_2"]
            max_channel_samples_buffer: 10000000  # optional, default 10000000
            read_write_timeout: 10  # optional, default 10
            sample_clock_output: '/Dev1/PFI14'  # optional
            counter_sample_clock_output: "/Dev1/PFI3"
            tt_ni_clock_input: 'tt_4' #input of the clock for the NI card into the time tagger
            tt_falling_edge_clock_input: 'tt_4'


    ni_ao:
        module.Class: 'ni_x_series.ni_x_series_analog_output.NIXSeriesAnalogOutput'
        options:
            device_name: 'Dev1'

            channels:
                ao0:
                    unit: 'V'
                    limits: [0, 10]
                    limits_LT: [0, 10]
                    keep_value: True
                ao1:
                    unit: 'V'
                    limits: [0, 10]
                    limits_LT: [0, 10]
                    keep_value: True
                ao2:
                    unit: 'V'
                    limits: [0, 10]
                    limits_LT: [0, 10]
                    keep_value: True
    ni_tt_io_cavity_scanner:
        module.Class: 'interfuse.ni_scanning_probe_interfuse.NiScanningProbeInterfuse'
        connect:
            scan_hardware: 'ni_io_cavity'
            analog_output: 'ni_ao_cavity'
        options:
            ni_channel_mapping:
                a: 'ao3'
                APD1: 'PFI8'
                #AI0: 'ai0'
                #APD3: 'PFI10'
            sum_channels: ["PFI8"]
            scan_units: 'MHz'
            position_ranges: # in m
                a: [0, 12.4e3] #347,93801 - 347,97216
            frequency_ranges:
                a: [1, 500]
            resolution_ranges:
                a: [20, 1000]
            input_channel_units:
                APD1: 'c/s'
                #AI0: 'V'
                #APD2: 'c/s'
                #APD3: 'c/s'
            backwards_line_resolution: 100 # optional
            maximum_move_velocity: 30e9 #Hz/s

    ni_io_cavity:
        module.Class: 'ni_x_series.ni_x_series_finite_sampling_io.NIXSeriesFiniteSamplingIO'
        options:
            device_name: 'Dev1'
            input_channel_units:  
                PFI8: 'c/s'
                
                #PFI10: 'c/s'
                #ai0: 'V'
                #ai1: 'V'
            sum_channels: ["PFI8"]
            output_channel_units:
                'ao3': 'V'
            #adc_voltage_ranges:
                #ai0: [-10, 10]  # optional
                #ai1: [-10, 10]  # optional
            output_voltage_ranges:

                ao3: [0, 4]

            output_voltage_ranges_LT:

                ao3: [0, 4]

    
    
            
            #TODO output range, also limits need to be included in constraints
            frame_size_limits: [1, 1e9]  # optional #TODO actual HW constraint?
            output_mode: 'JUMP_LIST' #EQUIDISTANT_SWEEP#'JUMP_LIST' # optional, must be name of SamplingOutputMode
            read_write_timeout: 10  # optional
            #sample_clock_output: '/Dev1/PFI11' # optional
            #flip mirror porto 0 channel 4

    ni_ao_cavity:
        module.Class: 'ni_x_series.ni_x_series_analog_output.NIXSeriesAnalogOutput'
        options:
            device_name: 'Dev1'
            channels:
                ao3:
                    unit: 'V'
                    limits: [0, 4]
                    keep_value: True

    
    # optional, for slow counter / timer series reader
    ni_instreamer:
        module.Class: 'ni_x_series.ni_x_series_in_streamer.NIXSeriesInStreamer'
        options:
            device_name: 'Dev1'
            digital_sources:  # optional
                - 'pfi8'
                - 'pfi3'
            analog_sources:  # optional
               - 'ai0'
            #   - 'ai1'
            # external_sample_clock_source: 'PFI0'  # optional
            # external_sample_clock_frequency: 1000  # optional
            adc_voltage_range: [-10, 10]  # optional
            max_channel_samples_buffer: 10000000  # optional
            read_write_timeout: 10  # optional

    switch_combiner_interfuse:
        module.Class: 'interfuse.switch_combiner_interfuse.SwitchCombinerInterfuse'
        connect:
            switch1: switch_combiner_resonant
            switch2: digital_switch_ps

    ni_wm_switch:
        native_module_name: 'ni_wavemeter_scanning_switch_ni'
        address: '129.69.46.209'
        port: 12345

    switch_combiner_resonant:
        module.Class: 'interfuse.switch_combiner_interfuse.SwitchCombinerInterfuse'
        connect:
            switch1: switch_combiner_apds
            switch2: shutter_switch_ni

    switch_combiner_apds:
        module.Class: 'interfuse.switch_combiner_interfuse.SwitchCombinerInterfuse'
        connect:
            switch1: apd_1_switch_ni
            switch2: apd_2_switch_ni

    flip_mirror_switch_ni:
        module.Class: 'switches.digital_switch_ni.DigitalSwitchNI'
        options:
            channel: '/Dev1/port0/line6'  # optional
            name: 'Flip mirror'  # optional
            switch_time: 0.1
            remember_states: False
            pulsed : True
            switches:                       # optional
                Mirror: ['Off', 'On']

    apd_2_switch_ni:
        module.Class: 'switches.digital_switch_ni.DigitalSwitchNI'
        options:
            channel: '/Dev1/port0/line29'  # optional
            name: 'APD II'  # optional
            switch_time: 0.1
            remember_states: False
            pulsed : True
            switches:                       # optional
                APD2: ['Off', 'On']
    apd_1_switch_ni:
        module.Class: 'switches.digital_switch_ni.DigitalSwitchNI'
        options:
            channel: '/Dev1/port0/line28'  # optional
            name: 'APD I'  # optional
            switch_time: 0.1
            remember_states: False
            pulsed : True
            switches:                       # optional
                APD1: ['Off', 'On']

    shutter_switch_ni:
        module.Class: 'switches.digital_switch_ni.DigitalSwitchNI'
        options:
            channel: '/Dev1/port0/line30'  # optional
            name: 'Shutter'  # optional
            switch_time: 0.1
            remember_states: True
            pulsed : False
            switches:                       # optional
                Shutter: ['Off', 'On']
        allow_remote: True
        
    green_ibeam_switch_atto3:
        module.Class: 'switches.switch_ibeam_smart.DigitalSwitchIBeamSmart'
        connect: 
            laser: ibeam_smart_remote
        options:
            name: 'iBeamSmartAtto3'  # optional
            switch_time: 0.1
            remember_states: True
            pulsed : False
            switches:                       # optional
                iBeamSmartAtto3: ['Off', 'On']
        allow_remote: True

    princeton:
        module.Class: "spectrometer.princeton_client.PrincetonSpectrometerClient"
        options:
            ip: '192.168.202.44'#attodry:'169.254.128.44'
            port: 3336

    oceanoptics:
        module.Class: 'spectrometer.oceanoptics_spectrometer.OceanOptics'

    myspectrometer:
        module.Class: 'dummy.spectrometer_dummy.SpectrometerDummy'
    
    microwave_dummy:
        module.Class: 'dummy.microwave_dummy.MicrowaveDummy'

    mw_source_smiq:
        module.Class: 'microwave.mw_source_smiq.MicrowaveSmiq'
        options:
            visa_address: 'GPIB1::25::INSTR'
            comm_timeout: 10000  # in milliseconds

    mw_source_smiq2:
        module.Class: 'microwave.mw_source_smiq.MicrowaveSmiq'
        options:
            visa_address: 'GPIB1::28::INSTR'
            comm_timeout: 10000  # in milliseconds

    finite_sampling_input_dummy:
        module.Class: 'dummy.finite_sampling_input_dummy.FiniteSamplingInputDummy'
        options:
            simulation_mode: 'ODMR'
            sample_rate_limits: [1, 1e6]
            frame_size_limits: [1, 1e9]
            channel_units:
                'APD counts': 'c/s'
                'Photodiode': 'V'

    crc:
        module.Class: 'stm32_crc.STM32CRC'
        options:
            port: 'COM8'
            baudrate: 115200

    
    pulsestreamer_api:
        module.Class: 'swabian_instruments.pulse_streamer_api.PulseStreamer'
        options:
            ip_address: '129.69.46.143'
            pulse_schemes_directory: 'Z:\Vlad\pulse_schemes'

    pulsestreamer:
        module.Class: 'swabian_instruments.pulse_streamer.PulseStreamer'
        options:
            pulsestreamer_ip: '129.69.46.143'
            #pulsed_file_dir: 'C:\\Software\\pulsed_files'
            laser_channel: 2
            uw_x_channel: 5
            use_external_clock: False
            external_clock_option: 0

    digital_switch_ps:
        module.Class: 'switches.digital_switch_ps.DigitalSwitchPS'
        connect:
            pulsestreamer: 'pulsestreamer'
        options:
            channels: [0, 1, 2, 3, 7]  # optional
            name: 'Pulse Streamer Bluefors'  # optional
            switch_time: 0.1
            remember_states: True
            switches:
                ResonantBF1: ['Off', 'On']                       # optional
                ResonantBF2: ['Off', 'On']                       # optional
                BlueBF: ['Off', 'On']
                GreenBF: ['Off', 'On']
                MWSwitchBF: ['Off', 'On']
            pulsed_switches: []
        allow_remote: true

    powermeter:
        module.Class: 'powermeter.PM100D.PM100D'
        options:
            address: 'USB0::0x1313::0x8078::P0006721::INSTR'#"USB0::0x1313::0x8078::P0027062::INSTR"#'USB0::0x1313::0x80B0::P3000581::INSTR'#'USB0::0x1313::0x8078::P0006721::INSTR' #or 'USB0::0x1313::0x80B0::P3000581::INSTR'
            process_value_channels:
                Power:
                    unit: 'W'
                    limits: [0, 0.5]
                    dtype: float

    magnet_x:
        module.Class: 'vector_magnet.ami.AMI430'
        options:
            ip: '192.168.202.102'
            port: 7180

    magnet_y:
        module.Class: 'vector_magnet.ami.AMI430'
        options:
            ip: '192.168.202.101'
            port: 7180

    magnet_z:
        module.Class: 'vector_magnet.ami.AMI430'
        options:
            ip: '192.168.202.100'
            port: 7180

    vector_magnet:
        module.Class: 'vector_magnet.ami_vector_magnet.Magnet3D'
        connect:
            magnet_x: 'magnet_x'
            magnet_y: 'magnet_y'
            magnet_z: 'magnet_z'
        options:
            constraints:
                'B_max' : 1
                'Bz_max' : 6
            timerIntervals:
                'fastRamp' : 10000
                'slowRamp' : 10000
                'rampToZero' : 10000
                'pswStatusChange' : 31000
                'equalizeCurrents' : 1000
    attocube_scanner:
        module.Class: 'attocube.anc300.ANC300'    
        options:
            address: "COM9"

    motordriver_pi3:
        module.Class: 'motor.motordriver_pi3.Motordriver'
        options:
            port: 'COM7'
            active_motor_numbers: [0,1,2,3]
        allow_remote: true

    tt_laser_scanner_remote:
        module.Class: 'interfuse.dl_pro_tt_ao_scan.DLProTTPLEScanner'
        connect:
            tt: 'tagger'
            # tt_remote: 'tagger_remote'
            triggered_ao: 'dl_pro_remote'
        options:
            channel_mapping:
                a: 'OutA'
                APD1: 'tt_1'
                APD2: 'tt_2'
                APD3: 'tt_3'
                # APD4: 'ttR_1'
            sum_channels: ["tt_1"] #, "ttR_1"]
            ao_trigger_channel: "tt_6"
            # ao_remote_trigger_channel: "ttR_6"
            scan_units: 'MHz'
            position_ranges: # in m
                a: [0, 18000]
            frequency_ranges:
                a: [1, 2000]
            resolution_ranges:
                a: [20, 5000]
            input_channel_units:
                APD1: 'c/s'
                APD2: 'c/s'
                APD3: 'c/s'
                # APD4: 'c/s'
            backwards_line_resolution: 100 # optional
            maximum_move_velocity: 50e9 #MHz/s

    tt_laser_scanner:
        module.Class: 'interfuse.dl_pro_tt_ao_scan.DLProTTPLEScanner'
        connect:
            tt: 'tagger'
            # tt_remote: 'tagger_remote'
            triggered_ao: 'dl_pro'
        options:
            channel_mapping:
                a: 'OutA'
                APD1: 'tt_1'
                APD2: 'tt_2'
                APD3: 'tt_3'
                # APD4: 'ttR_1'
            sum_channels: ["tt_1"] #, "ttR_1"]
            ao_trigger_channel: "tt_8"
            # ao_remote_trigger_channel: "ttR_6"
            scan_units: 'MHz'
            position_ranges: # in m
                a: [0, 18000]
            frequency_ranges:
                a: [1, 2000]
            resolution_ranges:
                a: [20, 5000]
            input_channel_units:
                APD1: 'c/s'
                APD2: 'c/s'
                APD3: 'c/s'
                # APD4: 'c/s'
            backwards_line_resolution: 100 # optional
            maximum_move_velocity: 50e9 #MHz/s

    dl_pro:
        module.Class: 'laser.toptica_dl_pro.DlProLaser'    
        options:
            tcp_address: 129.69.46.10 #192.168.202.74
            trigger_channel : 3
            ao_channel_config : 
                OutA: 
                    limits: [0, 4] 
                    keep_value: True

    dl_pro_remote:
        module.Class: 'laser.toptica_dl_pro.DlProLaser'    
        options:
            tcp_address: 129.69.46.43 #192.168.202.74
            trigger_channel : 3
            ao_channel_config : 
                OutA: 
                    limits: [0, 4] 
                    keep_value: True


    red_pitaya:
        module.Class: 'red_pitaya.pyRPL.PyRPL'    
        options:
            config: "pyrpl_config_lock_eom"

    y:
        module.Class: 'picoquant.ppg512.PPG512'
        options:
            port: 'COM10'
            vccrf: 15000
            vref: 400
            
    vanguard_laser:
        module.Class: "laser.vanguard_spectra_physics.VanguardPulsedLaser"
        options:
            interface: "COM7"
    
    ello_devices:
        native_module_name: 'ello_devices'
        address: '129.69.46.209'
        port: 12345
        certfile: 'C:\Users\YY3\keys\mkCryo.crt'
        keyfile: 'C:\Users\YY3\keys\mkCryo.key'

    ello_switch_atto:
        native_module_name: 'ello_switch'
        address: '129.69.46.64'
        port: 12345
        certfile: 'C:\Users\YY3\keys\mkCryo.crt'
        keyfile: 'C:\Users\YY3\keys\mkCryo.key'
        
    ello_devices_atto:
        native_module_name: 'ello_devices'
        address: '129.69.46.64'
        port: 12345
        certfile: 'C:\Users\YY3\keys\mkCryo.crt'
        keyfile: 'C:\Users\YY3\keys\mkCryo.key'

    ibeam_smart:
        module.Class: 'laser.ibeam_smart.iBeamSmart'    
        options:
            port: "COM8"
        allow_remote: true

    ao_electrodes_remote:
        native_module_name: 'ni_ao_electrodes'
        address: '129.69.46.64'
        port: 12345
        certfile: 'C:\Users\YY3\keys\mkCryo.crt'
        keyfile: 'C:\Users\YY3\keys\mkCryo.key'


    ibeam_smart_remote:
        native_module_name: 'ibeam_smart'
        address: '129.69.46.64'
        port: 12345
        certfile: 'C:\Users\YY3\keys\mkCryo.crt'
        keyfile: 'C:\Users\YY3\keys\mkCryo.key'
    

    digital_switch_ps_atto3:
        native_module_name: 'digital_switch_ps'
        address: '129.69.46.64'
        port: 12345
        certfile: 'C:\Users\YY3\keys\mkCryo.crt'
        keyfile: 'C:\Users\YY3\keys\mkCryo.key'

    cwave:
        module.Class: 'cwave.cwave_api.CWave'
        options:
            ip: '129.69.46.217'
            port: '10001'

    ello_switch_remote:
        native_module_name: 'ello_switch'
        address: '129.69.46.209'
        port: 12345
        certfile: 'C:\Users\yy3\keys\mkCryo.crt'
        keyfile: 'C:\Users\yy3\keys\mkCryo.key'


    princeton_picam_remote:
        native_module_name: 'princeton_picam'
        address: '129.69.46.209'
        port: 12345
        certfile: 'C:\Users\yy3\keys\mkCryo.crt'
        keyfile: 'C:\Users\yy3\keys\mkCryo.key'
