#  Example Qudi configuration file.
#  The recommended path for user specific files is C:\Users\<user_name>\qudi\config

global:
    # list of modules to load when starting
    startup_modules: []

    # Module server configuration for accessing qudi GUI/logic/hardware modules from remote clients
    remote_modules_server:
        address: 'localhost'
        port: 12345

    # Server port for serving the active qudi module namespace locally (localhost).
    # Used by e.g. the Qudi jupyter kernel.
    namespace_server_port: 18861

    # If this flag is set (True), all arguments passed to qudi module APIs from remote
    # (jupyter notebook, qudi console, remote modules) will be wrapped and passed "per value"
    # (serialized and de-serialized). This is avoiding a lot of inconveniences with using numpy in
    # remote clients.
    # If you do not want to use this workaround and know what you are doing, you can disable this
    # feature by setting this flag to False.
    force_remote_calls_by_value: True

    # Qss stylesheet for controlling the appearance of the GUIs.
    # Absolute path or relative to qudi.artwork.styles
    stylesheet: 'qdark.qss'

    # Default root directory for measurement data storage. All eventual data sub-directories should
    # be contained within this directory. This is not enforced, just convention.
    # The fallback directory is <user home>/qudi/Data/
    # default_data_dir: C:\Users\neverhorst\qudi\Data

    # Save data to daily data sub-directories by default
    daily_data_dirs: True

gui:
    time_series_gui:
        module.Class: 'time_series.time_series_gui.TimeSeriesGui'
        options:
            use_antialias: True  # optional, set to False if you encounter performance issues
        connect:
            _time_series_logic_con: time_series_reader_logic

    scanner_gui:
        module.Class: 'scanning.scannergui.ScannerGui'
        options:
            image_axes_padding: 0.02
            default_position_unit_prefix: null  # optional, use unit prefix characters, e.g. 'u' or 'n'
        connect:
            scanning_logic: scanning_probe_logic
            data_logic: scanning_data_logic
            optimize_logic: scanning_optimize_logic

    laser_gui:
        module.Class: 'laser.laser_gui.LaserGui'
        connect:
            laser_logic: laser_logic

    odmr_gui:
        module.Class: 'odmr.odmrgui.OdmrGui'
        connect:
            odmr_logic: 'odmr_logic'

logic:
    time_series_reader_logic:
        module.Class: 'time_series_reader_logic.TimeSeriesReaderLogic'
        options:
            max_frame_rate: 20  # optional (default: 20Hz)
            channel_buffer_size: 1048576  # optional (default: 1MSample)
            max_raw_data_bytes: 1073741824  # optional (default: 1GB)
        connect:
            streamer: nicard_6343_instreamer

    scanning_probe_logic:
        module.Class: 'scanning_probe_logic.ScanningProbeLogic'
        options:
            max_history_length: 20
            max_scan_update_interval: 2
            position_update_interval: 1
        connect:
            scanner: ni_scanning_probe

    scanning_data_logic:
        module.Class: 'scanning_data_logic.ScanningDataLogic'
        options:
            max_history_length: 20
        connect:
            scan_logic: scanning_probe_logic

    scanning_optimize_logic:
        module.Class: 'scanning_optimize_logic.ScanningOptimizeLogic'
        connect:
            scan_logic: scanning_probe_logic

    laser_logic:
        module.Class: 'laser_logic.LaserLogic'
        options:
            query_interval: 0.1
        connect:
            laser: 'laser_dummy'

    odmr_logic:
        module.Class: 'odmr_logic.OdmrLogic'
        connect:
            microwave: 'mw_source_smiq'
            data_scanner: 'ni_finite_sampling_input'

hardware:
    nicard_6343_instreamer:
        module.Class: 'ni_x_series.ni_x_series_in_streamer.NIXSeriesInStreamer'
        options:
            device_name: 'Dev1'
            digital_sources:  # optional
                - 'PFI0'
            max_channel_samples_buffer: 10000000  # optional
            read_write_timeout: 10  # optional

    laser_dummy:
        module.Class: 'dummy.simple_laser_dummy.SimpleLaserDummy'

    mw_source_smiq:
        module.Class: 'microwave.mw_source_smiq.MicrowaveSmiq'
        options:
            visa_address: 'GPIB1::29::INSTR'
            comm_timeout: 10000  # in milliseconds

    ni_scanning_probe:
        module.Class: 'interfuse.ni_scanning_probe_interfuse.NiScanningProbeInterfuse'
        connect:
            scan_hardware: 'ni_finite_sampling_io'
            analog_output: 'ni_ao'
        options:
            ni_channel_mapping:
                x: 'ao0'
                y: 'ao1'
                z: 'ao2'
                APD1: 'PFI0'
            position_ranges: # in m
                x: [-10e-6, 10e-6]
                y: [-10e-6, 10e-6]
                z: [-10e-6, 10e-6]
            frequency_ranges: #Aka values written/retrieved per second; Check with connected HW for sensible constraints.
                x: [1, 500]
                y: [1, 500]
                z: [1, 500]
            resolution_ranges:
                x: [1, 1000]
                y: [1, 1000]
                z: [1, 1000]
            input_channel_units:
                APD1: 'c/s'
            backwards_line_resolution: 50 # optional
            move_velocity: 10e-6 #m/s; This speed is used for scanner movements and avoids jumps from position to position.

    ni_finite_sampling_io:
        module.Class: 'ni_x_series.ni_x_series_finite_sampling_io.NIXSeriesFiniteSamplingIO'
        options:
            device_name: 'Dev1'
            input_channel_units:
                PFI0: 'c/s'
            output_channel_units: # Specify used output channels
                'ao0': 'V'
                'ao1': 'V'
                'ao2': 'V'
            output_voltage_ranges:
                ao0: [0, 10]
                ao1: [0, 10]
                ao2: [0, 10]
            frame_size_limits: [1, 1e9]  # optional #TODO actual HW constraint?
            default_output_mode: 'JUMP_LIST' # optional, must be name of SamplingOutputMode
            read_write_timeout: 10  # optional
            sample_clock_output: '/Dev1/PFI11' # optional: routing of sample clock to a physical connection

    ni_ao:
        module.Class: 'ni_x_series.ni_x_series_analog_output.NIXSeriesAnalogOutput'
        options:
            device_name: 'Dev1'
            channels:
                ao0:
                    limits: [0, 10.0]
                    keep_value: True
                ao1:
                    limits: [0, 10.0]
                    keep_value: True
                ao2:
                    limits: [0, 10.0]
                    keep_value: True
                ao3:
                    limits: [0, 8.0]
                    keep_value: True

    ni_finite_sampling_input:
        module.Class: 'ni_x_series.ni_x_series_finite_sampling_input.NIXSeriesFiniteSamplingInput'
        options:
            device_name: 'Dev1'
            digital_channel_units:  # optional
                'PFI0': 'c/s'
            max_channel_samples_buffer: 10000000  # optional, default 10000000
            read_write_timeout: 10  # optional, default 10
