#  Example Qudi configuration file.

global:
    # list of modules to load when starting
    startup: [ple_gui, switch_gui, AO_gui, confocal_gui]

    # Module server configuration for accessing qudi GUI/logic/hardware modules from remote clients
    remote_modules_server:
        address: '129.69.46.165'
        port: 12345
        certfile: 'C:\Users\yy3\keys\qinu.crt'
        keyfile: 'C:\Users\yy3\keys\qinu.key'

    # Server port for serving the active qudi module namespace locally (localhost).
    # Used by e.g. the Qudi jupyter kernel.
    namespace_server_port: 18861

    # If this flag is set (True), all arguments passed to qudi module APIs from remote
    # (jupyter notebook, qudi console, remote modules) will be wrapped and passed "per value"
    # (serialized and de-serialized). This is avoiding f lot of inconveniences with using numpy in
    # remote clients.
    # If you do not want to use this workaround and know what you are doing, you can disable this
    # feature by setting this flag to False.
    force_remote_calls_by_value: True

    # Qss stylesheet for controlling the appearance of the GUIs.
    # Absolute path or relative to qudi.artwork.styles
    stylesheet: 'qdark.qss'

    # Default root directory for measurement data storage. All eventual data sub-directories should
    # be contained within this directory. This is not enforced, just convention.
    # The fallback directory is <user home>/qudi/Data/
    # default_data_dir: C:\Users\neverhorst\qudi\Data

    # Save data to daily data sub-directories by default
    daily_data_dirs: True

gui:

    switch_gui:
        module.Class: 'switch.switch_gui.SwitchGui'
        connect:
            switchlogic: 'switchlogic'

    AO_gui:
        module.Class: 'AO.AO_gui.AOGui'
        connect:
            aologic: 'AOLogic'
            power_calibration_logic: 'aom_power_calibration_logic'
        options:
            ignore_aos: ["SPCM1", "SPCM2", "Laser_620_freq", "RF"]

    confocal_gui:
        module.Class: 'scanning.scannergui.ScannerGui'
        options:
            image_axes_padding: 0.02
            default_position_unit_prefix: null  # optional, use unit prefix characters, e.g. 'u' or 'n'
            optimizer_plot_dimensions: [2,1]
        connect:
            scanning_logic: scanning_probe_logic
            data_logic: scanning_data_logic
            optimize_logic: scanning_optimize_logic

    timetagger:
        module.Class: 'timetagger.timetagger.TTGui'
        connect:
            timetaggerlogic: 'timetaggerlogic'

    ple_gui:
        module.Class: 'ple.ple_gui.PLEScanGui'
        connect:
            scannerlogic: ple_scanner_logic
            optimizerlogic: ple_optimize_logic
            data_logic: ple_data_logic

    magnetgui_qinu:
        module.Class: 'magnet.magnet_gui_qinu.MagnetWindow'
        connect:
            magnetlogic: magnetlogic
            magnet: vector_magnet


    timetagger_remote:
        module.Class: 'timetagger.timetagger.TTGui'
        connect:
            timetaggerlogic: 'timetaggerlogic_remote'


    odmr_gui:
        module.Class: 'odmr.odmrgui.OdmrGui'
        connect:
            odmr_logic: 'odmr_logic'

    poi_manager_gui:
        module.Class: 'poimanager.poimanagergui.PoiManagerGui'
        connect:
            poi_manager_logic: 'poi_manager_logic'

    spectrometer:
        module.Class: 'spectrometer.spectrometer_gui.SpectrometerGui'
        connect:
            spectrometer_logic: 'spectrometerlogic'

    wavemeter_gui:
        module.Class: 'wavemeter.wavemeterloggui.WavemeterLogGui'
        connect:
            wavemeterloggerlogic: 'wavelogger_logic'

    queuegui:
        module.Class: 'queue.Queue.queue_gui'
        connect:
            queue_logic: 'queuelogic'
    gatedcounter:
        module.Class: 'gated_counter.gated_counter_gui.GatedCounterGui'
        connect:
            gatedcounterlogic1: 'gatedcounterlogic'

    TransitionTracker:
        module.Class: 'transition_tracker.transition_tracker_gui.TransitionTrackerGui'
        connect:
            transition_tracker_logic: 'transitiontrackerlogic'

logic:

    aom_power_calibration_logic:
        module.Class: 'aom_power_calibration_logic.AOMPowerCalibrationLogic'
        connect:
            analog_output_connector: 'process_setpoint_combiner'
            digital_output_connector: 'switch_combiner'
            power_meter_connector: 'powermeter'
            ppg_connector: 'ppg'
        options:
            aom_configs:
                Laser_520:
                    aom_do_channel: 'Laser_520'
                Laser_450:
                    aom_do_channel: 'Laser_450'
                Laser_620:
                    aom_do_channel: 'Laser_620'
                Laser_620_det:
                    aom_do_channel: 'Laser_620_det'
                Laser_620_pi:
                    aom_do_channel: 'Laser_620_pi'
                    eom_do_channel: 'Laser_620_pi'  # Optional, if EOM (PPG) pulsing should be used

            save_path: "C:/Users/yy3/qudi/Data/Power_calibration/"

    nuclear_ops_opx_utils:
        module.Class: 'nuclear_ops_opx_utils.NuclearOpsOPXUtils'
        connect:
            power_calibration_logic: 'aom_power_calibration_logic'
            ple_scanner_logic: 'ple_scanner_logic'
            transition_tracker_logic: 'transitiontrackerlogic'
            opx: 'OPX'


    transitiontrackerlogic:
        module.Class: 'transition_tracker.TransitionTracker'
        connect:
            mcas_holder: 'mcas_dict_awg'
            #rabi_logic: 'rabilogic'
            #odmr_logic: 'odmrlogic'
            #ple_logic: 'laserscannerlogic'
            #powerstabilization_logic: 'powerstabilizationlogic'

    gatedcounterlogic:
        module.Class: 'gated_counter_logic.GatedCounter'
        connect:
            mcas_holder: 'mcas_dict_awg'
            fastcounter: 'tagger'

    queuelogic: #free declaration
        module.Class: 'queue.queue_logic.queue_logic' #a class path.
        connect:
            # McasHolder: 'mcas_dict_awg'
            OpxHolder_connector: 'OPX'
            TransitionTracker_connector: 'transitiontrackerlogic'
            Confocal_connector: 'scanning_probe_logic'
            GatedCounter_connector: 'gatedcounterlogic'
            Optimizer_connector: 'scanning_optimize_logic'
            FastCounter_connector: 'tagger'
            PleOptimizeLogic_connector: 'ple_optimize_logic'
            PleScannerLogic_connector: 'ple_scanner_logic'
            MagnetLogic_connector: 'magnetlogic'
            PPG_connector: 'ppg'
            counterlogic1_connector: 'timetaggerlogic'
            Wavemeter_connector: 'wavemeter'
            DlcPro620_connector: 'dlc_pro_620'
            PowerCalibrationLogic_connector: 'aom_power_calibration_logic'
            NuclearOpsOPXUtils_connector: 'nuclear_ops_opx_utils'
            Switches_connector: "switch_combiner"
            AOLogic_connector: "AOLogic"
            Microwave_connector: 'mw_source_smiq'

    wavelogger_logic:
        module.Class: "wavemeter_logger_logic.WavemeterLoggerLogic"
        connect:
            wavemeter: "wavemeter"
            timetagger: 'tagger'

    # spectrometerlogic:
    #     module.Class: 'spectrometer_logic.SpectrometerLogic'
    #     connect:
    #         spectrometer: 'oceanoptics'
    #         #flip_mirror: 'flip_mirror_switch_ni'

    spectrometerlogic:
        module.Class: 'spectrometer_logic.SpectrometerLogic'
        connect:
            spectrometer: 'princeton_picam_remote' #'princeton'
            #flip_mirror: 'flip_mirror_switch_ni'

    ple_scanner_logic:
        module.Class: 'ple.ple_scanner_logic.PLEScannerLogic'
        options:
            scan_axis: 'a' #'Laser_620_freq'
            max_history_length: 10
            max_scan_update_interval: 2
            position_update_interval: 1
            channel: 'sum'
            # frequency_calibration_poly_degree: 1
            # frequency_calibration_points: 20


        connect:
            scanner: tt_laser_scanner_qm
            wavemeter: wavemeter

    ple_data_logic:
        module.Class: 'ple.data_logic.PleDataLogic'
        options:
            max_history_length: 10
        connect:
            scan_logic: ple_scanner_logic

    ple_optimize_logic:
        module.Class: 'ple.optimize_logic.PLEOptimizeScannerLogic'
        connect:
            scan_logic: ple_scanner_logic

    timetaggerlogic:
        module.Class: 'timetagger_logic.TimeTaggerLogic'
        connect:
            timetagger: 'tagger'

    timetaggerlogic_remote:
        module.Class: 'timetagger_logic.TimeTaggerLogic'
        connect:
            timetagger: 'tagger_remote'

    magnetlogic:
        module.Class: 'magnetlogic.MagnetLogic'
        connect:
            magnet: vector_magnet
            tagger: tagger

    camera_logic:
        module.Class: 'camera_logic.CameraLogic'
        connect:
            camera: 'thorlabs_camera'

    scanning_probe_logic:
        module.Class: 'scanning.probe_logic.ScanningProbeLogic'
        options:
            max_history_length: 10
            max_scan_update_interval: 2
            position_update_interval: 1
            backwards_line_resolution: 100
        connect:
            scanner: adwin_scanner


    setupcontrollogic:
        module.Class: setup_control.setup_control.SetupControlLogicQINU
        connect:
            Adwin_IO: adwin_IO
        options: {}

    scanning_data_logic:
        module.Class: 'scanning.data_logic.ScanningDataLogic'
        options:
            max_history_length: 10
        connect:
            scan_logic: scanning_probe_logic

    scanning_optimize_logic:
        module.Class: 'scanning.optimize_logic.ScanningOptimizeLogic'
        connect:
            scan_logic: scanning_probe_logic
        options:
            backwards_line_resolution: 20

    odmr_logic:
        module.Class: 'odmr_logic.OdmrLogic'
        connect:
            microwave: 'mw_source_smiq'
            data_scanner: 'adwin_tt_input'

    poi_manager_logic:
        module.Class: 'poi_manager_logic.PoiManagerLogic'
        options:
            data_scan_axes: xy
        connect:
            scanning_logic: 'scanning_probe_logic'
            optimize_logic: 'scanning_optimize_logic'
            data_logic: 'scanning_data_logic'

    switchlogic:
        module.Class: 'switch_logic.SwitchLogic'
        options:
            watchdog_interval: 1  # optional
            autostart_watchdog: True  # optional
        connect:
            switch: 'switch_combiner'
    AOLogic:
        module.Class: 'AO_logic.AOLogic'
        options:
            watchdog_interval: 1  # optional
            autostart_watchdog: True  # optional
        connect:
            ao_hardware: 'process_setpoint_combiner'
            power_calibration_logic: 'aom_power_calibration_logic'


hardware:

    wavemeter_proxy:
        module.Class: 'wavemeter.high_finesse_proxy.HighFinesseProxy'
        options:
            watchdog_interval: 1.0  # how often the watchdog checks for errors/changes in s

    wavemeter:
        module.Class: 'wavemeter.high_finesse_wavemeter.HighFinesseWavemeter'
        connect:
            proxy: wavemeter_proxy
        options:
            channels:
                620_laser:
                    switch_ch: 1    # channel on the wavemeter switch
                    unit: 'nm'    # wavelength (m) or frequency (Hz)
                    exposure: 1  # exposure time in ms, optional

    princeton:
        module.Class: "spectrometer.princeton_client.PrincetonSpectrometerClient"
        options:
            ip: '169.254.128.44'#'192.168.202.44'#attodry:'169.254.128.44'
            port: 3336

    princeton_picam_remote:
        native_module_name: 'princeton_picam'
        address: '129.69.46.209'
        port: 12345
        certfile: 'C:\Users\yy3\keys\qinu.crt'
        keyfile: 'C:\Users\yy3\keys\qinu.key'


    mcas_dict_awg:
        module.Class: 'Keysight_AWG_M8190.pym8190a.mcas_dict_holder'
        options:
            name: 'awg_holder'

    dlc_pro_637:
        module.Class: 'laser.toptica_dl_pro.DlProLaser'
        options:
            tcp_address: 192.168.1.13
            trigger_channel: 3
            ao_channel_config:
                OutA:
                    limits: [0, 4]
                    keep_value: True

    dlc_pro_620:
        module.Class: 'laser.toptica_dl_pro.DlProLaser'
        options:
            tcp_address: 129.69.46.43
            trigger_channel: 3
            ao_channel_config:
                OutA:
                    limits: [0, 2] #V
                    keep_value: True


    tt_laser_scanner:
        module.Class: 'interfuse.dl_pro_tt_ao_scan.DLProTTPLEScanner'
        connect:
            tt: 'tagger'
            #tt_remote: 'tagger_remote'
            triggered_ao: 'dlc_pro_620'
        options:
            channel_mapping:
                a: 'OutA'
                APD1: 'tt_1'
                APD2: 'tt_2'
                APD3: 'tt_3'
            sum_channels: ["tt_3"]
            ao_trigger_channel: "tt_8"
            # ao_remote_trigger_channel: "ttR_6"
            scan_units: 'MHz'
            position_ranges: # in m
                a: [0, 9000] #MHz
            frequency_ranges:
                a: [1, 2000] #Hz
            resolution_ranges:
                a: [20, 5000]  # pixels
            input_channel_units:
                APD1: 'c/s'
                APD2: 'c/s'
                APD3: 'c/s'
            backwards_line_resolution: 100 # optional
            maximum_move_velocity: 50e9 #MHz/s

    tt_laser_scanner_qm_rtt:
        module.Class: 'interfuse.dl_pro_tt_qm_scan.DLProTTPLEScanner'
        connect:
            tt: 'tagger'
            tt_remote: 'tagger_remote'
            triggered_ao: 'AO_OPX'
        options:
            channel_mapping:
                a: 'Laser_620_freq'
                APD1: 'tt_1'
                APD2: 'tt_2'
                APD3: 'tt_3'
                APD4: 'ttR_1'
                APD5: 'ttR_2'
                APD6: 'ttR_3'
            sum_channels: ["tt_3"]
            ao_trigger_channel: "tt_5"
            ao_stop_channel: "tt_4"
            ao_remote_trigger_channel: "ttR_6"
            scan_units: 'MHz'
            position_ranges: # in m
                a: [-10500, 10500] #MHz
            frequency_ranges:
                a: [1, 10000] #MHz/s
            resolution_ranges:
                a: [20, 5000]  # pixels
            input_channel_units:
                APD1: 'c/s'
                APD2: 'c/s'
                APD3: 'c/s'
                APD4: 'c/s'
                APD5: 'c/s'
                APD6: 'c/s'
            backwards_line_resolution: 100 # optional
            maximum_move_velocity: 50e9 #MHz/s

    tt_laser_scanner_qm:
        module.Class: 'interfuse.dl_pro_tt_qm_scan.DLProTTPLEScanner'
        connect:
            tt: 'tagger'
            triggered_ao: 'AO_OPX'
        options:
            channel_mapping:
                a: 'Laser_620_freq'
                APD1: 'tt_1'
                APD2: 'tt_2'
                APD3: 'tt_3'
            sum_channels: ["tt_3"]
            ao_trigger_channel: "tt_5"
            ao_stop_channel: "tt_4"
            scan_units: 'MHz'
            position_ranges: # in m
                a: [-10900, 10900] #MHz
            frequency_ranges:
                a: [1, 10000] #MHz/s
            resolution_ranges:
                a: [20, 5000]  # pixels
            input_channel_units:
                APD1: 'c/s'
                APD2: 'c/s'
                APD3: 'c/s'
            backwards_line_resolution: 100 # optional
            maximum_move_velocity: 50e9 #MHz/s

    ppg:
        module.Class: 'picoquant.ppg512.PPG512'
        options:
            port: 'COM3'
            vccrf: 12000
            vref: 230

    powermeter:
        module.Class: 'powermeter.thorlabs_powermeter.ThorlabsPowermeter'
        options:
            # Device address of the powermeter.
            # If omitted, the module will connect to the first powermeter found on the system.
            # The module logs an info message with the addresses of all available powermeters upon activation.
            # address: 'USB0::0x1313::0x8078::P0012345::INSTR'
            wavelength: 520.0


    thorlabs_camera:
        module.Class: 'camera.thorlabs.thorlabs_DCx.CameraThorlabs'
        options:
            default_exposure: 0.1
            default_gain: 1.0
            id_camsera: 0 # if more tha one camera is present



    adwin_AO: #for confocal static.
        module.Class: 'jaeger_computer_technik.adwin_IO.Adwin_AO'
        options:
            device_name: 'adwin11'
            channels:
                ao1: #x#
                    limits: [-5.0, 5.0]
                    limits_LT: [-5.0, 5.0]
                    keep_value: True
                ao2: #y#
                    limits: [-5.0, 5.0]
                    limits_LT: [-5.0, 5.0]
                    keep_value: True
                ao3: #z#
                    limits: [0, 5.0]
                    #limits: [0, 10]
                    limits_LT: [0, 5.0]
                    keep_value: True

    vector_magnet:
        module.Class: 'jaeger_computer_technik.adwin_vector_magnet.Magnet3D'

        options:
            ramp_freq: 2 #Hz
            voltage_step_size: 0.01 # V
            timerIntervals:
                'fastRamp' : 1000
                'rampToZero' : 1000

    adwin_trigger:
        module.Class: 'jaeger_computer_technik.adwin_IO.AdwinTrigger'

    fastcounter_timetagger:
        module.Class: 'swabian_instruments.timetagger_fast_counter.TimeTaggerFastCounter'
        options:
            timetagger_channel_apd_0: 1
            timetagger_channel_apd_1: 2
            timetagger_channel_apd_2: 3
            timetagger_channel_detect: 5
            timetagger_channel_sequence: 5
            timetagger_sum_channels: True
        connect:
            timetagger: 'tagger'

    tagger:
        module.Class: 'swabian_instruments.timetagger_api.TT'
        options:
            port: 12233
            hist:
                channels: [1, 2, 3]
                trigger_channel: 5

            corr:
                channel_start: 2
                channel_stop: 3
            counter:
                channels: [1, 2, 3]

            count_between_markers:
                click_channel: 2
                begin_channel: 5
                end_channel: 4

            apd_channels:
                APD1: 1
                APD2: 2
                APD3: 3

            combiner:
                channels: [1,2]
            channels_params:
                1: # APD1
                    delay: 0
                    trigger_level: 0.3
                2: # SNSPD1
                    delay: 0
                    trigger_level: 0.26
                3: # SNSPD2
                    delay: 0
                    trigger_level: 0.36
                4: # Memory Trigger OPX
                    delay: 0
                    trigger_level: 0.25
                5: # Gate Trigger OPX
                    delay: 0
                    trigger_level: 0.25
                6: # SMIQ/Adwin Trigger (for ODMR /wo OPX)
                    delay: 20e3
                    trigger_level: 2
                7: # AdWin Trigger (for confocal)
                    delay: 0
                    trigger_level: 1.5
                8: # Trigger Scanner DLC Pro
                    delay: 0
                    trigger_level: 1

    tagger_remote:
        module.Class: 'swabian_instruments.timetagger_api.TT'
        options:
            remote_tagger_ip: '129.69.46.64'
            remote_tagger_port: 41101
            counter:
                channels: [1, 2, 3]
            hist:
                channels: [1, 2, 3]
                trigger_channel: 5

            corr:
                channel_start: 1
                channel_stop: 2

    adwin_galvo:
        module.Class: 'jaeger_computer_technik.adwin_Scanner.Adwin_Scanning_Device'
        options:
            device_name: 'adwin11'
            channels:
                ao1:
                    unit: 'V'
                    limits: [-1.43, 1.43]
                    keep_value: True
                ao2:
                    unit: 'V'
                    limits: [-1.43, 1.43]
                    keep_value: True


                ao3:
                    unit: 'V'
                    limits: [0, 5.0]
                    keep_value: True
            clock:
                do9: 'scan_clock_physical_output'


    adwin_tt_io: ###C:\Users\yy3\git\squdi\src\qudi\hardware\jaeger_computer_technik\adwin_tt_io.py
        module.Class: 'jaeger_computer_technik.adwin_tt_io.AdwinSamplingIO'
        connect:
            tt: tagger
            adwin: adwin_galvo

        options:
            device_name: 'adwin11' ##for booting? - maybe not needed as it is lready in adwin_base.
            input_channel_units:  # optional
                tt_1: 'c/s'
                tt_2: 'c/s'
                tt_3: 'c/s'
            sum_channels: ["tt_1", "tt_2", "tt_3"]
            output_channel_units:
                'ao1': 'V'
                'ao2': 'V'
                'ao3': 'V'
            #adc_voltage_ranges:
                #ai0: [-10, 10]  # optional
                #ai1: [-10, 10]  # optional
            output_voltage_ranges:
                ao1: [-1.43, 1.43]
                ao2: [-1.43, 1.43]
                ao3: [0, 5]
            output_voltage_ranges_LT:
                ao1: [-1.43, 1.43]
                ao2: [-1.43, 1.43]
                ao3: [0, 5]
                #ao3: [0, 1]


            #TODO output range, also limits need to be included in constraints
            frame_size_limits: [1, 1e9]  # optional #TODO actual HW constraint?
            output_mode: 'JUMP_LIST' #'JUMP_LIST' # optional, must be name of SamplingOutputMode
            read_write_timeout: 10  # optional
            sample_clock_output: 'do9' # optional
            tt_adwin_clock_input: 'tt_7' #input of the clock for the NI card into the time tagger
            tt_falling_edge_clock_input: 'tt_7'
            #flip mirror porto 0 channel 4

    adwin_tt_input: ###C:\Users\yy3\git\squdi\src\qudi\hardware\jaeger_computer_technik\adwin_tt_io.py
        module.Class: 'jaeger_computer_technik.adwin_tt_input.AdwinSamplingInput'
        connect:
            tt: 'tagger'
            adwin_trigger: 'adwin_trigger'
        options:
            device_name: 'adwin11'
            digital_channel_units:  # optional
                'tt1': 'c/s'
                'tt2': 'c/s'
                'tt3': 'c/s'
            sum_channels: ["tt1", "tt2", "tt3"]
            max_channel_samples_buffer: 10000000  # optional, default 10000000
            read_write_timeout: 10  # optional, default 10
            sample_clock_output: 'do3'  # optional
            counter_sample_clock_output: "do3"
            tt_ni_clock_input: 'tt6' #input of the clock for the ADwin card into the time tagger
            tt_falling_edge_clock_input: 'tt6'



    adwin_scanner:
        #module.Class: 'jaeger_computer_technik.adwin_base.AdwinBase'
        module.Class: 'interfuse.adwin_scanning_probe_interfuse.NiScanningProbeInterfuseBare'
        connect:
            scan_hardware: 'adwin_tt_io'
            analog_output: 'adwin_AO'

        options:
            ni_channel_mapping:
                x: 'ao1'
                y: 'ao2'
                z: 'ao3'
                APD1: 'tt_1'
                APD2: 'tt_2'
                APD3: 'tt_3'
            sum_channels: ["tt_1", "tt_2", "tt_3"]
            scan_units: 'm'
            position_ranges: # in m
                z: [-5e-6, 15e-6]
                x: [-200e-6, 200e-6]# [-698.4e-6, 698.4e-6]
                y: [-200e-6, 200e-6]# [-698.4e-6, 698.4e-6]
            frequency_ranges:
                z: [1, 300]
                x: [1, 300]
                y: [1, 300]
            resolution_ranges:
                z: [1, 1000]
                x: [1, 1000]
                y: [1, 1000]
            input_channel_units:
                APD1: 'c/s'
                APD2: 'c/s'
                APD3: 'c/s'

            backwards_line_resolution: 0 # optional
            maximum_move_velocity: 400e-6 #400e-6 #m/s
            default_samples_number: 50
            max_counts: 3e7
            read_write_timeout: 10
            counting_edge_rising: True
            scanner_counter_channels: ['1','2','3']

    mw_source_smiq:
        module.Class: 'microwave.mw_source_smiq.MicrowaveSmiq'
        options:
            visa_address: 'GPIB0::28::INSTR'
            comm_timeout: 10000  # in milliseconds

    OPX:
        module.Class: 'OPX.OPX_holder.OPX'
        options:
            qm_config_file: "configuration"

    digital_switch_opx:
        module.Class: 'OPX.digital_switch_OPX.DigitalSwitchOPX'
        connect:
            OPX: "OPX"
        options:
            remember_states: True
            qm_config_file: 'configuration'

    digital_switch_adwin:
        module.Class: 'jaeger_computer_technik.digital_switch_adwin.DigitalSwitchAdwin'
        options:
            switches:
                flip_mirror_camera:
                    port: 2 # physisch 3
                    pulsed_output: True
                    states: ['out', 'in']

                flip_powermeter:
                    port: 1 # physisch 2
                    pulsed_output: True
                    states: ['out', 'in']

                flip_fiber_excitation:
                    port: 5 # physisch 6
                    pulsed_output: True
                    states: ['out', 'in']

    switch_combiner:
        module.Class: 'interfuse.switch_combiner_interfuse.SwitchCombinerInterfuse'
        connect:
            switch1: digital_switch_opx
            switch2: digital_switch_adwin
        options:
            name: 'DO'  # optional name of the combined hardware

            # if True the switch names will be extended by the hardware name of the individual switches in front.
            extend_hardware_name: False

    AO_OPX:
        module.Class: 'OPX.analog_output_OPX.AnalogOutputOPX'
        connect:
            OPX: "OPX"
            PPG: "ppg"
        options:
            qm_config_file: "configuration"
            analog_outputs:
                Laser_520:
                    limits: [0, 0.26]
                Laser_620:
                    limits: [0, 0.25]
                Laser_620_pi:
                    limits: [-0.315, -0.22]
                Laser_620_det:
                    limits: [0, 0.26]
                Laser_450:
                    limits: [0, 0.2]


    AO_Adwin:
        module.Class: 'jaeger_computer_technik.analog_output_adwin.AnalogOutputAdwin'
        options:
            analog_outputs:
                # laser_power_450:
                #     port: 7
                #     limits: [0, 5]
                power_lamp:
                    port: 8
                    limits: [0, 5]

    process_setpoint_combiner:
        module.Class: 'interfuse.process_setpoint_combiner_interfuse.ProcessSetpointCombinerInterfuse'
        connect:
            ao_device1: AO_OPX
            ao_device2: AO_Adwin
        options:
            name: combined_aos  # optional name of the combined hardware
