#  1Example Qudi configuration file.

global:
    # list of modules to load when starting
    startup_modules: [] #["pulsed_gui", 
                    # "ple_gui", 
                    # "odmr_gui", 
                    # "scanner_gui", 
                    # "timetagger", 
                    # "attocube_scanner"]
    #, "cobolt_green", "cobolt_red"]
    # "poi_manager_gui", 
    # startup: dasfdsfds
        
        # - timetagger
        # - odmr_gui
        # - ple_gui
        # - poi_manager_gui
        # - pulsed_gui
        # - attocube_scanner
    # Module server configuration for accessing qudi GUI/logic/hardware modules from remote clients
    remote_modules_server:
        address: 'localhost'
        port: 12345

    # Server port for serving the active qudi module namespace locally (localhost).
    # Used by e.g. the Qudi jupyter kernel.
    namespace_server_port: 18861

    # If this flag is set (True), all arguments passed to qudi module APIs from remote
    # (jupyter notebook, qudi console, remote modules) will be wrapped and passed "per value"
    # (serialized and de-serialized). This is avoiding a lot of inconveniences with using numpy in
    # remote clients.
    # If you do not want to use this workaround and know what you are doing, you can disable this
    # feature by setting this flag to False.
    force_remote_calls_by_value: True

    # Qss stylesheet for controlling the appearance of the GUIs.
    # Absolute path or relative to qudi.artwork.styles
    stylesheet: 'qdark.qss'

    # Default root directory for measurement data storage. All eventual data sub-directories should
    # be contained within this directory. This is not enforced, just convention.
    # The fallback directory is <user home>/qudi/Data/
    # default_data_dir: C:\Users\neverhorst\qudi\Data

    # Save data to daily data sub-directories by default
    daily_data_dirs: True

gui:

    spectrometer:
        module.Class: 'spectrometer.spectrometer_gui.SpectrometerGui'
        connect:
            spectrometer_logic: 'spectrometerlogic'

    scanner_gui:
        module.Class: 'scanning.scannergui.ScannerGui'
        options:
            image_axes_padding: 0.02
            default_position_unit_prefix: null  # optional, use unit prefix characters, e.g. 'u' or 'n'
            optimizer_plot_dimensions: [2,1]
        connect:
            scanning_logic: scanning_probe_logic
            data_logic: scanning_data_logic
            optimize_logic: scanning_optimize_logic

    poi_manager_gui:
        module.Class: 'poimanager.poimanagergui.PoiManagerGui'
        connect:
            poi_manager_logic: 'poi_manager_logic'
    
    time_series_gui:
        module.Class: 'time_series.time_series_gui.TimeSeriesGui'
        options:
            use_antialias: True  # optional, set to False if you encounter performance issues
        connect:
            _time_series_logic_con: time_series_reader_logic

    timetagger:
        module.Class: 'timetagger.timetagger.TTGui'
        connect:
            timetaggerlogic: 'timetaggerlogic'

logic:

    time_series_reader_logic:
        module.Class: 'time_series_reader_logic.TimeSeriesReaderLogic'
        options:
            max_frame_rate: 10  # optional (10Hz by default)
            calc_digital_freq: True  # optional (True by default)
            active_channels: ['pfi2']
        connect:
            streamer: ni_instreamer

    poi_manager_logic:
        module.Class: 'scanning.poi_manager_logic.PoiManagerLogic'
        connect:
            scanning_logic: 'scanning_probe_logic'
            optimize_logic: 'scanning_optimize_logic'
            data_logic: 'scanning_data_logic'

    scanning_probe_logic:
        module.Class: 'scanning.probe_logic.ScanningProbeLogic'
        options:
            max_history_length: 10
            max_scan_update_interval: 2
            position_update_interval: 1
        connect:
            scanner: ni_scanner

    scanning_data_logic:
        module.Class: 'scanning.data_logic.ScanningDataLogic'
        options:
            max_history_length: 10
        connect:
            scan_logic: scanning_probe_logic
    
    timetaggerlogic:
        module.Class: 'timetagger_logic.TimeTaggerLogic'
        connect:
            timetagger: 'tagger'

    scanning_optimize_logic:
        module.Class: 'scanning.optimize_logic.ScanningOptimizeLogic'
        connect:
            scan_logic: scanning_probe_logic
            
    spectrometerlogic:
        module.Class: 'spectrometer_logic.SpectrometerLogic'
        connect:
            spectrometer: 'oceanoptics' #'princeton'
            flip_mirror: 'flip_mirror_switch_ni'


hardware:

    # optional, for slow counter / timer series reader
    ni_instreamer:
        module.Class: 'ni_x_series.ni_x_series_in_streamer.NIXSeriesInStreamer'
        options:
            device_name: 'Dev3'
            digital_sources:  # optional
                - 'pfi8'
            # analog_sources:  # optional
            #   - 'ai0'
            #   - 'ai1'
            # external_sample_clock_source: 'PFI0'  # optional
            # external_sample_clock_frequency: 1000  # optional
            # adc_voltage_range: [-10, 10]  # optional
            max_channel_samples_buffer: 10000000  # optional
            read_write_timeout: 10  # optional


    ni_finite_sampling_input:
        module.Class: 'ni_x_series.ni_x_series_finite_sampling_input.NIXSeriesFiniteSamplingInput'
        options:
            device_name: 'Dev3'
            digital_channel_units:  # optional
                'pfi8': 'cnts'
            sum_channels: ["pfi8"]
            max_channel_samples_buffer: 10000000  # optional, default 10000000
            read_write_timeout: 10  # optional, default 10
            sample_clock_output: '/Dev3/PFI3'  # optional
    
    pulsestreamer:
        module.Class: 'swabian_instruments.pulse_streamer.PulseStreamer'
        options:
            pulsestreamer_ip: '129.69.46.93'
            #pulsed_file_dir: 'C:\\Software\\pulsed_files'
            laser_channel: 2
            uw_x_channel: 4
            use_external_clock: False
            external_clock_option: 0

    oceanoptics:
        module.Class: 'dummy.spectrometer_dummy.SpectrometerDummy'#'spectrometer.oceanoptics_spectrometer.OceanOptics'

    # tagger:
    #     module.Class: 'swabian_instruments.timetagger_api.TT'
    #     options:
    #         serial: "1740000JFB"
    #         port: 12234
    #         hist:
    #             channels: [3]
    #             trigger_channel: 6

    #         corr:
    #             channel_start: 1
    #             channel_stop: 3
            
    #         counter:
    #             channels: [3]

    
    tagger:
        module.Class: 'swabian_instruments.timetagger_api.TT'
        options:
            remote_tagger_ip: '129.69.46.41'
            remote_tagger_port: 41101
            counter:
                channels: [1, 2]
            hist:
                channels: [1, 2]
                trigger_channel: 5

            corr:
                channel_start: 1
                channel_stop: 2
            channels_params:
                1:
                    delay: 0
                    trigger_level: 0.2
                2:
                    delay: 0
                    trigger_level: 0.2
                7:
                    delay: 0
                    trigger_level: 0.4

    
           
    # tagger:

    #     module.Class: 'swabian_instruments.timetagger_api.TT'
    #     options:
    #         remote_tagger_ip: '129.69.46.164'
    #         remote_tagger_port: 12234
    #         counter:
    #             channels: [3]
    #         hist:
    #             channels: [3]
    #             trigger_channel: 6

    #         corr:
    #             channel_start: 1
    #             channel_stop: 3

    ni_scanner:
        module.Class: 'interfuse.ni_scanning_probe_interfuse.NiScanningProbeInterfuse'
        connect:
            scan_hardware: 'ni_tt_io'
            analog_output: 'ni_ao'
        options:
            ni_channel_mapping:
                z: 'ao2'
                x: 'ao0'
                y: 'ao1'
                #APD1: 'PFI8'
                APD1: 'tt_1'
    
                #AI0: 'ai0'
                #APD3: 'PFI10'
            scan_units: 'm'
            position_ranges: # in m
                z: [0e-6, 75e-6]
                x: [0e-6, 75e-6]
                y: [0e-6, 75e-6]
            frequency_ranges:
                z: [1, 300]
                x: [1, 300]
                y: [1, 300]
            resolution_ranges:
                z: [1, 1000]
                x: [1, 1000]
                y: [1, 1000]
            input_channel_units:
                APD1: 'c/s'

                #AI0: 'V's
                #APD2: 'c/s'
                #APD3: 'c/s'
            backwards_line_resolution: 200 # optional
            maximum_move_velocity: 400e-6 #400e-6 #m/s 

    ni_tt_io:
        module.Class: 'ni_x_series.ni_tt_io.NI_TT_XSeriesFiniteSamplingIO'
        connect:
            tt_remote: tagger
        options:
            device_name: 'Dev3'
            input_channel_units:  # optional
                tt_1: 'c/s'

                #ai0: 'V'
                #ai1: 'V'
            output_channel_units:
                'ao0': 'V'
                'ao1': 'V'
                'ao2': 'V'
            #adc_voltage_ranges:
                #ai0: [-10, 10]  # optional
                #ai1: [-10, 10]  # optional
            output_voltage_ranges:
                ao0: [0, 10]
                ao1: [0, 10]
                ao2: [0, 10]
    
            #TODO output range, also limits need to be included in constraints
            frame_size_limits: [1, 1e9]  # optional #TODO actual HW constraint?
            output_mode: 'JUMP_LIST' #'JUMP_LIST' # optional, must be name of SamplingOutputMode
            read_write_timeout: 10  # optional
            sample_clock_output: '/Dev3/PFI8' # optional
            tt_remote_ni_clock_input: 'tt_7' #input of the clock for the NI card into the time tagger
            tt_remote_falling_edge_clock_input: 'tt_7'
            #flip mirror porto 0 channel 4

    ni_tt_finite_sampling_input:
        module.Class: 'ni_x_series.ni_x_tt_series_finite_sampling_input.NIXTTSeriesFiniteSamplingInput'
        connect:
            tagger: 'tagger'
        options:
            device_name: 'Dev3'
            digital_channel_units:  # optional
                'tt1': 'cnts'
            max_channel_samples_buffer: 10000000  # optional, default 10000000
            read_write_timeout: 10  # optional, default 10
            sample_clock_output: '/Dev3/PFI12'  # optional
            counter_sample_clock_output: '/Dev3/PFI3'
            tt_ni_clock_input: 'tt7' #input of the clock for the NI card into the time tagger
            tt_falling_edge_clock_input: 'tt7'

    # ni_scanner:
    #     module.Class: 'interfuse.ni_scanning_probe_interfuse.NiScanningProbeInterfuse'
    #     connect:
    #         scan_hardware: 'ni_io'
    #         analog_output: 'ni_ao'
    #     options:
    #         ni_channel_mapping:
    #             z: 'ao2'
    #             x: 'ao0'
    #             y: 'ao1'
    #             APD1: 'PFI3'
    #             # APD2: 'PFI3'
    #             #AI0: 'ai0'
    #             #APD3: 'PFI10'
    #         sum_channels: ["PFI5"]
    #         scan_units: 'm'
    #         position_ranges: # in m
    #             z: [-7.5e-6, 7.5e-6]
    #             x: [-20e-6, 20e-6]
    #             y: [-20e-6, 20e-6]
    #         frequency_ranges:
    #             z: [1, 300]
    #             x: [1, 300]
    #             y: [1, 300]
    #         resolution_ranges:
    #             z: [1, 1000]
    #             x: [1, 1000]
    #             y: [1, 1000]
    #         input_channel_units:
    #             APD1: 'c/s'
  
    #             #AI0: 'V's
    #             #APD2: 'c/s'
    #             #APD3: 'c/s'
    #         backwards_line_resolution: 300 # optional
    #         maximum_move_velocity: 20e-6 #m/s 

    # ni_io:
    #     module.Class: 'ni_x_series.ni_x_series_finite_sampling_io.NIXSeriesFiniteSamplingIO'
    #     options:
    #         device_name: 'Dev2'
    #         input_channel_units:  
    #             PFI3: 'c/s'
    #             #PFI10: 'c/s'
    #             #ai0: 'V'
    #             #ai1: 'V'
    #         sum_channels: ["PFI5"]
    #         output_channel_units:
    #             'ao0': 'V'
    #             'ao1': 'V'
    #             'ao2': 'V'
    #         #adc_voltage_ranges:
    #             #ai0: [-10, 10]  # optional
    #             #ai1: [-10, 10]  # optional
    #         output_voltage_ranges:
    #             ao1: [0, 4]
    #             ao2: [0, 4]
    #             ao0: [0, 4]
    #         output_voltage_ranges_LT:
    #             ao1: [0, 4]
    #             ao2: [0, 4]
    #             ao0: [0, 4]
    
    
            
    #         #TODO output range, also limits need to be included in constraints
    #         frame_size_limits: [1, 1e9]  # optional #TODO actual HW constraint?
    #         output_mode: 'JUMP_LIST' #EQUIDISTANT_SWEEP#'JUMP_LIST' # optional, must be name of SamplingOutputMode
    #         read_write_timeout: 10  # optional
    #         #sample_clock_output: '/Dev1/PFI11' # optional
    #         #flip mirror porto 0 channel 4
    ni_ao:
        module.Class: 'ni_x_series.ni_x_series_analog_output.NIXSeriesAnalogOutput'
        options:
            device_name: 'Dev3'

            channels:
                ao0:
                    unit: 'V'
                    limits: [0, 10]
                    limits_LT: [0, 10]
                    keep_value: True
                ao1:
                    unit: 'V'
                    limits: [0, 10]
                    limits_LT: [0, 10]
                    keep_value: True
                ao2:
                    unit: 'V'
                    limits: [0, 10]
                    limits_LT: [0, 10]
                    keep_value: True
    flip_mirror_switch_ni:
        module.Class: 'switches.digital_switch_ni.DigitalSwitchNI'
        options:
            channel: '/Dev3/port0/line9'  # optional
            name: 'Flip mirror'  # optional
            switch_time: 0.1
            remember_states: False
            pulsed : True
            switches:                       # optional
                Mirror: ['Off', 'On']

    vanguard_laser:
        module.Class: "laser.vanguard_spectra_physics.VanguardPulsedLaser"
        options:
            interface: "COM6"