'<ADbasic Header, Headerversion 001.001>
' Process_Number                 = 10
' Initial_Processdelay           = 3000
' Eventsource                    = Timer
' Control_long_Delays_for_Stop   = No
' Priority                       = High
' Version                        = 1
' ADbasic_Version                = 6.3.1
' Optimize                       = Yes
' Optimize_Level                 = 1
' Stacksize                      = 1000
' Info_Last_Save                 = QINU  QINU\yy3
'<Header End>
#Include ADwinGoldII.inc

Init:
  Conf_DIO(1111b)
  Digout(1, 0)
  Digout(2, 0)
  Digout(3, 0)
  Digout(4, 0)
  Digout(5, 0)
  Digout(6, 0)
  Digout(7, 0)
  Digout(0, 0)

Event:
  Digout(1, PAR_1)
  Digout(2, PAR_2)
  Digout(3, PAR_3)
  Digout(4, PAR_4)
  Digout(5, PAR_5)
  Digout(6, PAR_6)
  Digout(7, PAR_7)
  Digout(0, PAR_8)
  
Finish:
  Digout(1, 0)
  Digout(2, 0)
  Digout(3, 0)
  Digout(4, 0)
  Digout(5, 0)
  Digout(6, 0)
  Digout(7, 0)
  Digout(0, 0)
